PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['resources\\instructions.jpg', 'resources\\main_loop.csv', 'resources\\tag_scale.html', 'resources\\tag_scale.js']
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = black
  expName = facetag
  exportHTML = on Save
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Routines
  Routine instructions
    ImageComponent insIm
      image [set every repeat] = resources/instructions.jpg
      size = (1.3, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent instAdvance
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine faceTag
    TextComponent null_txt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = JS
      Begin JS Experiment:
        // Exposes PsychoJS's addData for use in HTML pages
        window.addData = function(key, value) {
            psychoJS.experiment.addData(key, value);
        }

        // Adds an iframe on top of the PsychoJS canvas. Use src to specify an HTML page
        window.startHTML = (src) => {
          $('body').append('<iframe id="iframe" src="' + src +'" style="width: 100%; height: 100%; position:absolute;z-index:1;top:0;left:0;border:0;"></iframe>');
          window.finishedHTML = false;
        };

        // Removes the iframe again
        window.finishHTML = () => {
          $('#iframe').remove();
          window.finishedHTML = true;
        };

        // Note that you can use window.finishRoutine to check if the HTML page has completed
      Begin JS Routine:
        window.id = id ;
        psychoJS.experiment.addData("name", name);
        window.startHTML('resources/tag_scale.html');
      Each JS Frame:
        continueRoutine = !window.finishedHTML;
Flow
  Routine instructions
  LoopInitiator tag_trials loopType="TrialHandler"
    conditionsFile = resources\main_loop.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('name', 'CFD-WM-258-125-N.jpg'), ('id', '1Fx55bclbrFCNR4YzI4PAduV1nuDgN85h')]),
      OrderedDict([('name', 'CFD-WM-041-021-N.jpg'), ('id', '1BZNoLLVT1JawKZRTmeoaUTreobPVfiGc')]),
      OrderedDict([('name', 'CFD-WM-037-025-N.jpg'), ('id', '1T5CqMamkSkRK69-zqLLoFZ4di1ssLTk-')]),
      OrderedDict([('name', 'CFD-WM-252-224-N.jpg'), ('id', '1J7QnwS9uCKdau_UQteUt6HR_qLfbLi_t')]),
      OrderedDict([('name', 'CFD-WM-025-002-N.jpg'), ('id', '1t9iyvHxpcKNTOBTK091YZT7MGxPEUf5r')]),
      OrderedDict([('name', 'CFD-WM-205-007-N.jpg'), ('id', '1bND5V4dPZ8DkTDPCVwtbgaR2WUTXBouu')]),
      OrderedDict([('name', 'CFD-WM-024-015-N.jpg'), ('id', '1TrqWbaYGhGac83-O-DHEKIFUJP2MtAst')]),
      OrderedDict([('name', 'CFD-WM-019-003-N.jpg'), ('id', '1ymIqB_dEuXjJ1pezsLzcCdOEn3L7en45')]),
      OrderedDict([('name', 'CFD-WM-255-219-N.jpg'), ('id', '1eYA_PINcwGMSzm-ZjBO0XxSrmQ8zEzhs')]),
      OrderedDict([('name', 'CFD-WM-004-010-N.jpg'), ('id', '13ydKQJehifDEa84_fso_onWIG670cCFO')]),
      OrderedDict([('name', 'CFD-WM-202-107-N.jpg'), ('id', '1wZuNCwAcU4-6HtP7GzPlSy4OSQqUIph7')]),
      OrderedDict([('name', 'CFD-WM-006-002-N.jpg'), ('id', '1LezGR3AjPDmlLp1wq3cWPDWrlR5BTSDH')]),
      OrderedDict([('name', 'CFD-WM-036-031-N.jpg'), ('id', '1LpEAKVm1vSZyMnXW8O7FIHm8fCflUfJL')]),
      OrderedDict([('name', 'CFD-WM-217-070-N.jpg'), ('id', '1G_D_wRxQD6SUMUwxvApkRd3PBo5CKjrq')]),
      OrderedDict([('name', 'CFD-WM-233-106-N.jpg'), ('id', '1gHhUz4XgdjN-Kjg4MMq9CDYqnne97hQb')]),
      OrderedDict([('name', 'CFD-WM-211-054-N.jpg'), ('id', '1YvG_PnM13X25glMHgJHfYSp1U8u-y6KR')])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
    Routine faceTag
  LoopTerminator tag_trials
